PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = REPSWITCH_1
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent imageObject
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    MicrophoneComponent micSpeakResponse
      channels = auto
      device = default
      maxSize = 24000
      outputType = w64
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    KeyboardComponent keyTypeResponse
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','á','é','í','ó','ñ','ú','ü' 
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codeREPSWITCH
      Code Type = Both
      Begin JS Routine:
        respDisplay = "";
        maxDigits = 7;
        last_len = 0;
        key_list = [];
      Begin Routine:
        respDisplay = ""
        maxDigits = 7

        #key logger defaults
        last_len = 0
        key_list = []
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):

            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if ((keyResp.keys.length > last_len)) {
            last_len = keyResp.keys.length;
            key_list.push(keyResp.keys.pop());
            if (_pj.in_es6("backspace", key_list)) {
                key_list.remove("backspace");
                if ((key_list.length > 0)) {
                    key_list.pop();
                }
            } else {
                if (_pj.in_es6("return", key_list)) {
                    key_list.pop();
                    if ((key_list.length >= 2)) {
                        continueRoutine = false;
                    }
                }
            }
            while ((key_list.length > maxDigits)) {
                key_list.pop();
            }
            respDisplay = "".join(key_list);
        }
      End JS Routine:
        psychoJS.experiment.addData("subjResponse", respDisplay);
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    TextComponent textDebug
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $image
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  Routine Welcome
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the experiment!
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  Routine Instructions
    TextComponent textInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you will have to name the objects you see on the screen.
        If the background is red, type the name of the object.
        If the background is blue, say the name of the object out loud.


        Press SPACE to begin!
    KeyboardComponent keyInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine Goodbye
    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for participating!
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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Flow
  Routine Welcome
  Routine blank500
  Routine Instructions
  Routine blank500
  LoopInitiator trialsREPSWITCH loopType="TrialHandler"
    conditionsFile = repswitch.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sequence': 2, 'respModal': 'speak', 'target': 'NT', 'repSwitch': 'nontarget', 'stimulus': 'Stim1_Set1', 'correctAns': 'ratón', 'image': 'REPSWITCH1/PICTURE_1.png'},
      {'sequence': 2, 'respModal': 'speak', 'target': 'T', 'repSwitch': 'repeat', 'stimulus': 'Stim1_Set1', 'correctAns': 'ratón', 'image': 'REPSWITCH1/PICTURE_1.png'},
      {'sequence': 1, 'respModal': 'type', 'target': 'F', 'repSwitch': 'filler', 'stimulus': 'Stim1_Set3', 'correctAns': 'nube', 'image': 'REPSWITCH1/PICTURE_599.png'},
      {'sequence': 2, 'respModal': 'speak', 'target': 'NT', 'repSwitch': 'nontarget', 'stimulus': 'Stim2_Set1', 'correctAns': 'mesa', 'image': 'REPSWITCH1/PICTURE_110.png'},
      {'sequence': 2, 'respModal': 'speak', 'target': 'T', 'repSwitch': 'repeat', 'stimulus': 'Stim2_Set1', 'correctAns': 'mesa', 'image': 'REPSWITCH1/PICTURE_110.png'},
      {'sequence': 1, 'respModal': 'type', 'target': 'F', 'repSwitch': 'filler', 'stimulus': 'Stim2_Set3', 'correctAns': 'miel', 'image': 'REPSWITCH1/PICTURE_610.png'},
      {'sequence': 2, 'respModal': 'speak', 'target': 'NT', 'repSwitch': 'nontarget', 'stimulus': 'Stim3_Set1', 'correctAns': 'sirena', 'image': 'REPSWITCH1/PICTURE_12.png'},
      {'sequence': 1, 'respModal': 'type', 'target': 'T', 'repSwitch': 'switch', 'stimulus': 'Stim3_Set1', 'correctAns': 'sirena', 'image': 'REPSWITCH1/PICTURE_12.png'},
      {'sequence': 1, 'respModal': 'type', 'target': 'NT', 'repSwitch': 'nontarget', 'stimulus': 'Stim4_Set1', 'correctAns': 'muñeca', 'image': 'REPSWITCH1/PICTURE_128.png'}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
    Routine ITI
    Routine trial
    Routine blank500
  LoopTerminator trialsREPSWITCH
  Routine Goodbye
